<?xml version="1.0" encoding="utf-8"?>
<!--
This CellML file was generated on 15/04/2009 at 18:07:35 using:

COR (0.9.31.1203)
Copyright 2002-2009 Dr Alan Garny
http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.CellML.org/
-->
<model name="beeler_reuter_model_1977" cmeta:id="beeler_reuter_model_1977" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
   <units name="ms">
      <unit units="second" prefix="milli"/>
   </units>
   <units name="per_ms">
      <unit units="second" prefix="milli" exponent="-1"/>
   </units>
   <units name="mV">
      <unit units="volt" prefix="milli"/>
   </units>
   <units name="per_mV">
      <unit units="volt" prefix="milli" exponent="-1"/>
   </units>
   <units name="per_mV_ms">
      <unit units="mV" exponent="-1"/>
      <unit units="ms" exponent="-1"/>
   </units>
   <units name="mS_per_mm2">
      <unit units="siemens" prefix="milli"/>
      <unit units="metre" prefix="milli" exponent="-2"/>
   </units>
   <units name="uF_per_mm2">
      <unit units="farad" prefix="micro"/>
      <unit units="metre" prefix="milli" exponent="-2"/>
   </units>
   <units name="uA_per_mm2">
      <unit units="ampere" prefix="micro"/>
      <unit units="metre" prefix="milli" exponent="-2"/>
   </units>
   <units name="concentration_units">
      <unit units="mole" prefix="nano"/>
      <unit units="metre" prefix="milli" exponent="-3"/>
   </units>
   <units name="per_concentration_units">
      <unit units="concentration_units" exponent="-1"/>
   </units>
   <units name="coulomb_per_mole">
      <unit units="coulomb"/>
      <unit units="mole" exponent="-1"/>
   </units>
   <units name="per_mm">
      <unit units="metre" prefix="-3" exponent="-1"/>
   </units>
   <component name="environment">
      <variable name="time" units="ms" public_interface="out" cmeta:id="time">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#time">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
   </component>
   <component name="membrane">
      <variable name="V" units="mV" initial_value="-84.624" public_interface="out" cmeta:id="membrane_voltage">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_voltage">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="C" units="uF_per_mm2" initial_value="0.01" cmeta:id="membrane_capacitance"/>
      <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
         <rdf:Description rdf:about="#membrane_capacitance">
            <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
         </rdf:Description>
      </rdf:RDF>
      <variable name="time" units="ms" public_interface="in"/>
      <variable name="i_Na" units="uA_per_mm2" public_interface="in"/>
      <variable name="i_s" units="uA_per_mm2" public_interface="in"/>
      <variable name="i_x1" units="uA_per_mm2" public_interface="in"/>
      <variable name="i_K1" units="uA_per_mm2" public_interface="in"/>
      <variable name="Istim" units="uA_per_mm2" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>V</ci>
            </apply>
            <apply>
               <divide/>
                  <apply>
                     <minus/>
                     <ci>Istim</ci>
                     <apply>
                        <plus/>
                        <ci>i_Na</ci>
                        <ci>i_s</ci>
                        <ci>i_x1</ci>
                        <ci>i_K1</ci>
                     </apply>
                  </apply>
               <ci>C</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current">
	  <variable name="i_Na" units="uA_per_mm2" public_interface="out" cmeta:id="membrane_fast_sodium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>		  
      <variable name="g_Na" units="mS_per_mm2" initial_value="4e-2" cmeta:id="membrane_fast_sodium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	
	  <variable name="shift_INa_inact" units="mV" initial_value="0" private_interface="out" cmeta:id="membrane_fast_sodium_current_shift_inactivation">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_shift_inactivation">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_shift_inactivation"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
	  <variable name="perc_reduced_inact_for_IpNa" units="dimensionless" initial_value="0" private_interface="out" cmeta:id="membrane_fast_sodium_current_reduced_inactivation">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_reduced_inactivation">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_reduced_inactivation"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  
      <variable name="E_Na" units="mV" initial_value="50"/>
      <variable name="g_Nac" units="mS_per_mm2" initial_value="3e-5"/>
      <variable name="time" units="ms" public_interface="in" private_interface="out"/>
      <variable name="V" units="mV" public_interface="in" private_interface="out"/>
      <variable name="m" units="dimensionless" private_interface="in"/>
      <variable name="h" units="dimensionless" private_interface="in"/>
      <variable name="j" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_Na</ci>
            <apply>
               <times/>
               <apply>
                  <plus/>
                  <apply>
                     <times/>
                     <ci>g_Na</ci>
                     <apply>
                        <power/>
                        <ci>m</ci>
                        <cn cellml:units="dimensionless">3</cn>
                     </apply>
                     <ci>h</ci>
                     <ci>j</ci>
                  </apply>
                  <ci>g_Nac</ci>
               </apply>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_Na</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current_m_gate">
	  <variable name="m" units="dimensionless" initial_value="0.011" public_interface="out" cmeta:id="membrane_fast_sodium_current_m_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_m_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_m_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  	  
      <variable name="alpha_m" units="per_ms"/>
      <variable name="beta_m" units="per_ms"/>
      <variable name="V" units="mV" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_m</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <apply>
                     <minus/>
                     <cn cellml:units="per_mV_ms">1</cn>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>V</ci>
                     <cn cellml:units="mV">47</cn>
                  </apply>
               </apply>
               <apply>
                  <minus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.1</cn>
                        </apply>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">47</cn>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_m</ci>
            <apply>
               <times/>
               <cn cellml:units="per_ms">40</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_mV">0.056</cn>
                     </apply>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">72</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>m</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_m</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>m</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_m</ci>
                  <ci>m</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current_h_gate">
	  <variable name="h" units="dimensionless" initial_value="0.988" public_interface="out" cmeta:id="membrane_fast_sodium_current_h_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_h_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  	  
      <variable name="alpha_h" units="per_ms"/>
      <variable name="beta_h" units="per_ms"/>
      <variable name="h_inf" units="dimensionless"/>
	  <variable name="tau_h" units="ms" cmeta:id="membrane_fast_sodium_current_h_gate_tau">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_h_gate_tau">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_h_gate_tau"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  	  
      <variable name="shift_INa_inact" units="mV" public_interface="in"/>
	  <variable name="perc_reduced_inact_for_IpNa" units="dimensionless" public_interface="in"/>		  
      <variable name="V" units="mV" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_h</ci>
            <apply>
               <times/>
               <cn cellml:units="per_ms">0.126</cn>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_mV">0.25</cn>
                     </apply>
                     <apply>
                        <minus/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">77</cn>
                        </apply>
                        <ci>shift_INa_inact</ci>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_h</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_ms">1.7</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.082</cn>
                        </apply>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">22.5</cn>
                           </apply>
                           <ci>shift_INa_inact</ci>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>h_inf</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>alpha_h</ci>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <ci>perc_reduced_inact_for_IpNa</ci>
                           <cn cellml:units="dimensionless">100</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>alpha_h</ci>
                     <ci>beta_h</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <ci>perc_reduced_inact_for_IpNa</ci>
                  <cn cellml:units="dimensionless">100</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_h</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <ci>alpha_h</ci>
                  <ci>beta_h</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>h</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>h_inf</ci>
                  <ci>h</ci>
               </apply>
               <ci>tau_h</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="sodium_current_j_gate">
	  <variable name="j" units="dimensionless" initial_value="0.975" public_interface="out" cmeta:id="membrane_fast_sodium_current_j_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_j_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  	  
      <variable name="alpha_j" units="per_ms"/>
      <variable name="beta_j" units="per_ms"/>
      <variable name="j_inf" units="dimensionless"/>
	  <variable name="tau_j" units="ms" cmeta:id="membrane_fast_sodium_current_j_gate_tau">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_fast_sodium_current_j_gate_tau">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_j_gate_tau"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  	  
      <variable name="shift_INa_inact" units="mV" public_interface="in"/>
	  <variable name="perc_reduced_inact_for_IpNa" units="dimensionless" public_interface="in"/>		  	  
      <variable name="V" units="mV" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_j</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.055</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.25</cn>
                        </apply>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">78</cn>
                           </apply>
                           <ci>shift_INa_inact</ci>
                        </apply>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.2</cn>
                        </apply>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">78</cn>
                           </apply>
                           <ci>shift_INa_inact</ci>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_j</ci>
            <apply>
               <divide/>
               <cn cellml:units="per_ms">0.3</cn>
               <apply>
                  <plus/>
                  <apply>
                     <exp/>
                     <apply>
                        <times/>
                        <apply>
                           <minus/>
                           <cn cellml:units="per_mV">0.1</cn>
                        </apply>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">32</cn>
                           </apply>
                           <ci>shift_INa_inact</ci>
                        </apply>
                     </apply>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>j_inf</ci>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <ci>alpha_j</ci>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <divide/>
                           <ci>perc_reduced_inact_for_IpNa</ci>
                           <cn cellml:units="dimensionless">100</cn>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <plus/>
                     <ci>alpha_j</ci>
                     <ci>beta_j</ci>
                  </apply>
               </apply>
               <apply>
                  <divide/>
                  <ci>perc_reduced_inact_for_IpNa</ci>
                  <cn cellml:units="dimensionless">100</cn>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>tau_j</ci>
            <apply>
               <divide/>
               <cn cellml:units="dimensionless">1</cn>
               <apply>
                  <plus/>
                  <ci>alpha_j</ci>
                  <ci>beta_j</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>j</ci>
            </apply>
            <apply>
               <divide/>
               <apply>
                  <minus/>
                  <ci>j_inf</ci>
                  <ci>j</ci>
               </apply>
               <ci>tau_j</ci>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current">
	  <variable name="i_s" units="uA_per_mm2" public_interface="out" cmeta:id="membrane_L_type_calcium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_L_type_calcium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  	  
      <variable name="g_s" units="mS_per_mm2" initial_value="9e-4" cmeta:id="membrane_L_type_calcium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_L_type_calcium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>		  
      <variable name="E_s" units="mV"/>
      <variable name="Cai" units="concentration_units" initial_value="1e-4" public_interface="out" cmeta:id="cytosolic_calcium_concentration">
        <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
         <rdf:Description rdf:about="#cytosolic_calcium_concentration">
            <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration"/>
         </rdf:Description>
        </rdf:RDF>
      </variable>
      <variable name="time" units="ms" public_interface="in" private_interface="out"/>
      <variable name="V" units="mV" public_interface="in" private_interface="out"/>
      <variable name="d" units="dimensionless" private_interface="in"/>
      <variable name="f" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>E_s</ci>
            <apply>
               <minus/>
               <apply>
                  <minus/>
                  <cn cellml:units="mV">82.3</cn>
               </apply>
               <apply>
                  <times/>
                  <cn cellml:units="mV">13.0287</cn>
                  <apply>
                     <ln/>
                     <apply>
                        <times/>
                        <ci>Cai</ci>
                        <cn cellml:units="per_concentration_units">0.001</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>i_s</ci>
            <apply>
               <times/>
               <ci>g_s</ci>
               <ci>d</ci>
               <ci>f</ci>
               <apply>
                  <minus/>
                  <ci>V</ci>
                  <ci>E_s</ci>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>Cai</ci>
            </apply>
            <apply>
               <plus/>
               <apply>
                  <divide/>
                  <apply>
                     <times/>
                     <apply>
                        <minus/>
                        <cn cellml:units="per_mm">0.01</cn>
                     </apply>
                     <ci>i_s</ci>
                  </apply>
                  <cn cellml:units="coulomb_per_mole">1</cn>
               </apply>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.07</cn>
                  <apply>
                     <minus/>
                     <cn cellml:units="concentration_units">0.0001</cn>
                     <ci>Cai</ci>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current_d_gate">
	  <variable name="d" units="dimensionless" initial_value="0.003" public_interface="out" cmeta:id="membrane_L_type_calcium_current_d_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_L_type_calcium_current_d_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_d_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>		  
      <variable name="alpha_d" units="per_ms"/>
      <variable name="beta_d" units="per_ms"/>
      <variable name="V" units="mV" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_d</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.095</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">5</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">100</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">5</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">13.89</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_d</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.07</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">44</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">59</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">44</cn>
                        </apply>
                        <cn cellml:units="mV">20</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>d</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_d</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>d</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_d</ci>
                  <ci>d</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="slow_inward_current_f_gate">
	  <variable name="f" units="dimensionless" initial_value="0.994" public_interface="out" cmeta:id="membrane_L_type_calcium_current_f_gate">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_L_type_calcium_current_f_gate">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_f_gate"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  	  
      <variable name="alpha_f" units="per_ms"/>
      <variable name="beta_f" units="per_ms"/>
      <variable name="V" units="mV" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_f</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.012</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">28</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">125</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">28</cn>
                        </apply>
                        <cn cellml:units="mV">6.67</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_f</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.0065</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">30</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">50</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">30</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">5</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>f</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_f</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>f</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_f</ci>
                  <ci>f</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="time_dependent_outward_current">
	  <variable name="i_x1" units="uA_per_mm2" public_interface="out" cmeta:id="membrane_rapid_delayed_rectifier_potassium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_rapid_delayed_rectifier_potassium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>  	  
      <variable name="G_Kr" units="uA_per_mm2" initial_value="0.008" cmeta:id="membrane_rapid_delayed_rectifier_potassium_current_conductance">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_rapid_delayed_rectifier_potassium_current_conductance">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	  		  
      <variable name="time" units="ms" public_interface="in" private_interface="out"/>
      <variable name="V" units="mV" public_interface="in" private_interface="out"/>
      <variable name="x1" units="dimensionless" private_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <ci>x1</ci>
                  <ci>G_Kr</ci>
                  <apply>
                     <minus/>
                     <apply>
                        <exp/>
                        <apply>
                           <times/>
                           <cn cellml:units="per_mV">0.04</cn>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">77</cn>
                           </apply>
                        </apply>
                     </apply>
                     <cn cellml:units="dimensionless">1</cn>
                  </apply>
               </apply>
               <apply>
                  <exp/>
                  <apply>
                     <times/>
                     <cn cellml:units="per_mV">0.04</cn>
                     <apply>
                        <plus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">35</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="time_dependent_outward_current_x1_gate">
      <variable name="x1" units="dimensionless" initial_value="0.0001" public_interface="out"/>
      <variable name="alpha_x1" units="per_ms"/>
      <variable name="beta_x1" units="per_ms"/>
      <variable name="V" units="mV" public_interface="in"/>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>alpha_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn type="e-notation" cellml:units="per_ms">5<sep/>-4</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">50</cn>
                        </apply>
                        <cn cellml:units="mV">12.1</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">50</cn>
                        </apply>
                        <cn cellml:units="mV">17.5</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <ci>beta_x1</ci>
            <apply>
               <divide/>
               <apply>
                  <times/>
                  <cn cellml:units="per_ms">0.0013</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">16.67</cn>
                     </apply>
                  </apply>
               </apply>
               <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                     <exp/>
                     <apply>
                        <divide/>
                        <apply>
                           <minus/>
                           <apply>
                              <plus/>
                              <ci>V</ci>
                              <cn cellml:units="mV">20</cn>
                           </apply>
                        </apply>
                        <cn cellml:units="mV">25</cn>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
         <apply>
            <eq/>
            <apply>
               <diff/>
               <bvar>
                  <ci>time</ci>
               </bvar>
               <ci>x1</ci>
            </apply>
            <apply>
               <minus/>
               <apply>
                  <times/>
                  <ci>alpha_x1</ci>
                  <apply>
                     <minus/>
                     <cn cellml:units="dimensionless">1</cn>
                     <ci>x1</ci>
                  </apply>
               </apply>
               <apply>
                  <times/>
                  <ci>beta_x1</ci>
                  <ci>x1</ci>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="time_independent_outward_current">
	  <variable name="i_K1" units="uA_per_mm2" public_interface="out" cmeta:id="membrane_inward_rectifier_potassium_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_inward_rectifier_potassium_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>	   	  	  
      <variable name="time" units="ms" public_interface="in"/>
      <variable name="V" units="mV" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>i_K1</ci>
            <apply>
               <times/>
               <cn cellml:units="uA_per_mm2">0.0035</cn>
               <apply>
                  <plus/>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <cn cellml:units="dimensionless">4</cn>
                        <apply>
                           <minus/>
                           <apply>
                              <exp/>
                              <apply>
                                 <times/>
                                 <cn cellml:units="per_mV">0.04</cn>
                                 <apply>
                                    <plus/>
                                    <ci>V</ci>
                                    <cn cellml:units="mV">85</cn>
                                 </apply>
                              </apply>
                           </apply>
                           <cn cellml:units="dimensionless">1</cn>
                        </apply>
                     </apply>
                     <apply>
                        <plus/>
                        <apply>
                           <exp/>
                           <apply>
                              <times/>
                              <cn cellml:units="per_mV">0.08</cn>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="mV">53</cn>
                              </apply>
                           </apply>
                        </apply>
                        <apply>
                           <exp/>
                           <apply>
                              <times/>
                              <cn cellml:units="per_mV">0.04</cn>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="mV">53</cn>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
                  <apply>
                     <divide/>
                     <apply>
                        <times/>
                        <cn cellml:units="per_mV">0.2</cn>
                        <apply>
                           <plus/>
                           <ci>V</ci>
                           <cn cellml:units="mV">23</cn>
                        </apply>
                     </apply>
                     <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                        <apply>
                           <exp/>
                           <apply>
                              <times/>
                              <apply>
                                 <minus/>
                                 <cn cellml:units="per_mV">0.04</cn>
                              </apply>
                              <apply>
                                 <plus/>
                                 <ci>V</ci>
                                 <cn cellml:units="mV">23</cn>
                              </apply>
                           </apply>
                        </apply>
                     </apply>
                  </apply>
               </apply>
            </apply>
         </apply>
      </math>
   </component>
   <component name="stimulus_protocol">
      <variable name="Istim" units="uA_per_mm2" public_interface="out" cmeta:id="membrane_stimulus_current">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimStart" units="ms" initial_value="10" cmeta:id="membrane_stimulus_current_offset">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_offset">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_offset"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimEnd" units="ms" initial_value="50000"/>
      <variable name="IstimAmplitude" units="uA_per_mm2" initial_value="0.5" cmeta:id="membrane_stimulus_current_amplitude">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_amplitude">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimPeriod" units="ms" initial_value="1000" cmeta:id="membrane_stimulus_current_period">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_period">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="IstimPulseDuration" units="ms" initial_value="1" cmeta:id="membrane_stimulus_current_duration">
         <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/">
            <rdf:Description rdf:about="#membrane_stimulus_current_duration">
               <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_duration"/>
            </rdf:Description>
         </rdf:RDF>
      </variable>
      <variable name="time" units="ms" public_interface="in"/>
      <math xmlns="http://www.w3.org/1998/Math/MathML">
         <apply>
            <eq/>
            <ci>Istim</ci>
            <piecewise>
               <piece>
                  <ci>IstimAmplitude</ci>
                  <apply>
                     <and/>
                     <apply>
                        <geq/>
                        <ci>time</ci>
                        <ci>IstimStart</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <ci>time</ci>
                        <ci>IstimEnd</ci>
                     </apply>
                     <apply>
                        <leq/>
                        <apply>
                           <minus/>
                           <apply>
                              <minus/>
                              <ci>time</ci>
                              <ci>IstimStart</ci>
                           </apply>
                           <apply>
                              <times/>
                              <apply>
                                 <floor/>
                                 <apply>
                                    <divide/>
                                    <apply>
                                       <minus/>
                                       <ci>time</ci>
                                       <ci>IstimStart</ci>
                                    </apply>
                                    <ci>IstimPeriod</ci>
                                 </apply>
                              </apply>
                              <ci>IstimPeriod</ci>
                           </apply>
                        </apply>
                        <ci>IstimPulseDuration</ci>
                     </apply>
                  </apply>
               </piece>
               <otherwise>
                  <cn cellml:units="uA_per_mm2">0</cn>
               </otherwise>
            </piecewise>
         </apply>
      </math>
   </component>
   <group>
      <relationship_ref relationship="containment"/>
      <component_ref component="membrane">
         <component_ref component="sodium_current">
            <component_ref component="sodium_current_m_gate"/>
            <component_ref component="sodium_current_h_gate"/>
            <component_ref component="sodium_current_j_gate"/>
         </component_ref>
         <component_ref component="slow_inward_current">
            <component_ref component="slow_inward_current_d_gate"/>
            <component_ref component="slow_inward_current_f_gate"/>
         </component_ref>
         <component_ref component="time_dependent_outward_current">
            <component_ref component="time_dependent_outward_current_x1_gate"/>
         </component_ref>
         <component_ref component="time_independent_outward_current"/>
      </component_ref>
   </group>
   <group>
      <relationship_ref relationship="encapsulation"/>
      <component_ref component="sodium_current">
         <component_ref component="sodium_current_m_gate"/>
         <component_ref component="sodium_current_h_gate"/>
         <component_ref component="sodium_current_j_gate"/>
      </component_ref>
      <component_ref component="slow_inward_current">
         <component_ref component="slow_inward_current_d_gate"/>
         <component_ref component="slow_inward_current_f_gate"/>
      </component_ref>
      <component_ref component="time_dependent_outward_current">
         <component_ref component="time_dependent_outward_current_x1_gate"/>
      </component_ref>
   </group>
   <connection>
      <map_components component_1="membrane" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="sodium_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="slow_inward_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="time_dependent_outward_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="time_independent_outward_current" component_2="environment"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="sodium_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_Na" variable_2="i_Na"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="slow_inward_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_s" variable_2="i_s"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="time_dependent_outward_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_x1" variable_2="i_x1"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="time_independent_outward_current"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="i_K1" variable_2="i_K1"/>
   </connection>
   <connection>
      <map_components component_1="sodium_current" component_2="sodium_current_m_gate"/>
      <map_variables variable_1="m" variable_2="m"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="sodium_current" component_2="sodium_current_h_gate"/>
      <map_variables variable_1="h" variable_2="h"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="shift_INa_inact" variable_2="shift_INa_inact"/>
      <map_variables variable_1="perc_reduced_inact_for_IpNa" variable_2="perc_reduced_inact_for_IpNa"/>	  
   </connection>
   <connection>
      <map_components component_1="sodium_current" component_2="sodium_current_j_gate"/>
      <map_variables variable_1="j" variable_2="j"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
      <map_variables variable_1="shift_INa_inact" variable_2="shift_INa_inact"/>
      <map_variables variable_1="perc_reduced_inact_for_IpNa" variable_2="perc_reduced_inact_for_IpNa"/>	  
   </connection>
   <connection>
      <map_components component_1="time_dependent_outward_current" component_2="time_dependent_outward_current_x1_gate"/>
      <map_variables variable_1="x1" variable_2="x1"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="slow_inward_current" component_2="slow_inward_current_d_gate"/>
      <map_variables variable_1="d" variable_2="d"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="slow_inward_current" component_2="slow_inward_current_f_gate"/>
      <map_variables variable_1="f" variable_2="f"/>
      <map_variables variable_1="time" variable_2="time"/>
      <map_variables variable_1="V" variable_2="V"/>
   </connection>
   <connection>
      <map_components component_1="membrane" component_2="stimulus_protocol"/>
      <map_variables variable_1="Istim" variable_2="Istim"/>
   </connection>
   <connection>
      <map_components component_1="environment" component_2="stimulus_protocol"/>
      <map_variables variable_1="time" variable_2="time"/>
   </connection>
</model>
